//preps and runs Plate 1 for each set of plates (aka lineage)
//This method needs to have the reader variable set to a plate reader name
#InsertVariables

Overlord({getNewGrowthPlate}, [Carousel.Stack.7.Labware.Count] {platesInStack})
WaitFor(Overlord)
Math(platesInStack, {platesInStack} - 1)

Set(worklistFile, {dataDirectory}\{experimentId}_growth-plate_{lineage}-{plateNum}.csv)
RemoteHam(S-Cell-STAR, RunMethod, {hamiltonMethodDir}\{startMethod})
Timer(600)
WaitFor(Timer)
WaitFor(S-Cell-STAR)

WaitFor({reader}, false)

Gen5({reader}, CarrierOut)
WaitFor({reader}, false)

Overlord({ovpCommDirectory}\Move Growth Plate from STAR to Reader.ovp, [Gen5.Reader.Name] "{reader}" [Sealer.ManualSeal] "{manualSeal}")
WaitFor(Overlord)


If({lineage} == 1, Set(overNightProtocol, {overNightProtocol1}))
If({lineage} == 2, Set(overNightProtocol, {overNightProtocol2}))

Gen5({reader}, RunExp, {overNightProtocol}, {experimentId}_growth-plate_{lineage}-{plateNum}, {dataDirectory})
GetTimeNow(readStartTime)

If({lineage} == 1, Math(readEndTime1, {readStartTime} + {overNightProtocolTime1}))
If({lineage} == 2, Math(readEndTime2, {readStartTime} + {overNightProtocolTime2}))